PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Emotional Stroop
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = 1.0000, 1.0000, 1.0000
      shape = circle
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'g','b','r','p'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Press g for green colour
        Press b for blue colour
        Press p for pink colour
        Press r for red colour
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/Stroop conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'word': 'happy', 'colour': 'Red', 'corr_resp': 'r'},
      {'word': 'delighted', 'colour': 'Blue', 'corr_resp': 'b'},
      {'word': 'joy', 'colour': 'Pink', 'corr_resp': 'p'},
      {'word': 'excitement', 'colour': 'Green', 'corr_resp': 'g'},
      {'word': 'remorse', 'colour': 'Blue', 'corr_resp': 'b'},
      {'word': 'sad', 'colour': 'Red', 'corr_resp': 'r'},
      {'word': 'angry', 'colour': 'Pink', 'corr_resp': 'p'},
      {'word': 'disturbed', 'colour': 'Blue', 'corr_resp': 'b'},
      {'word': 'bottle', 'colour': 'Green', 'corr_resp': 'g'},
      {'word': 'cap', 'colour': 'Red', 'corr_resp': 'r'},
      {'word': 'pen', 'colour': 'Pink', 'corr_resp': 'p'},
      {'word': 'bag', 'colour': 'Green', 'corr_resp': 'g'}]
    Routine trial
  LoopTerminator trials
